CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:407
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:Green
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:Red
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:Cyan
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:DAPI
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    Select the image type:Color image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Cyan
    Conversion method:Combine
    Image type:RGB
    Name the output image:Cyan_Gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:6|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
    Select the input image:DAPI
    Conversion method:Combine
    Image type:RGB
    Name the output image:DAPI_Gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:7|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
    Select the input image:Green
    Conversion method:Combine
    Image type:RGB
    Name the output image:Green_Gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:8|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
    Select the input image:Red
    Conversion method:Combine
    Image type:RGB
    Name the output image:Red_Gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
IdentifyPrimaryObjects:[module_num:9|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notes:['Identify the individual cells. Three-class thresholding works better than the default two-class method. Some adjustment of the correction factor, smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:DAPI_Gray
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MeasureObjectSizeShape:[module_num:10|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notes:['Measure morphological features from the cell objects.']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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:11|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notes:['Measure intensity features from cell objects against the red channel.']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
    Select images to measure:Green_Gray, Red_Gray, Cyan_Gray
    Select objects to measure:Nuclei

ExportToSpreadsheet:[module_num:12|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the cell objects and the image will be saved to separate .csv files. Mean per-image cell measurements will also be exported to the image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:
    Use the object name for the file name?:No

ConvertObjectsToImage:[module_num:13|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
    Select the input objects:Nuclei
    Name the output image:CellImage_color
    Select the color format:Color
    Select the colormap:Set2

DisplayDataOnImage:[module_num:14|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:CellImage_color
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:1
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_numbered
    Saved file format:tiff
    Output file location:Elsewhere...|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:CellImage_color
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cellimage
    Saved file format:tiff
    Output file location:Elsewhere...|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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